PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = ratouilleExperiment
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $ImageFile
      pos = (0, 0.26)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
      units = height
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    TextComponent FamQ
      letterHeight = 0.045
      pos = (-0.50, -0.025)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
      text = How familiar is this food item to you?
      units = height
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    SliderComponent FamSlider
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ("Not at all", "Extremely")
      letterHeight = 0.035
      pos = (0.5, -0.025)
      size = (0.6, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent ComfQ
      letterHeight = 0.045
      pos = (-0.40, -0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Do you consider this food item to be a comfort food?
      units = height
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    SliderComponent ComfSlider
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ("Not at all", "Extremely")
      letterHeight = 0.035
      pos = (0.5, -0.22)
      size = (0.6,0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent NosQ
      letterHeight = 0.045
      pos = (-0.39, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Does this food hold any nostalgic value for you?
      units = height
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    SliderComponent NosSlider
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ("Not at all", "Extremely")
      letterHeight = 0.035
      pos = (0.5, -0.4)
      size = (0.6,0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Introduction
    TextComponent intro
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to The Ratatouille Moment. The purpose of this study is to explore the effect of foods on emotions and homeostasis.

        You will be rating each food image on a set of 3 questions on a scale of 1-7. The goal is to assess the emotional value of each food item for you. Rating the foods is time sensitive, so please be attentive to the screen. There will be a 15 second break every so often.

        Press [Space] to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Crosshair
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:221
    conditionsFile = C:\Experiment\imageList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'images/coleslow3.jpg'},
      {'ImageFile': 'images/gyro.jpg'},
      {'ImageFile': 'images/porkchopdinner.jpg'}]
    Routine Crosshair
    Routine trial
  LoopTerminator trials
